<?xml version='1.0' encoding='UTF-8'?>
<model name="ICaCl" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <!-- Ca-activated-Cl-channels-->
    <import xlink:href="../common/units.cellml">
        <units name="current_units" units_ref="current_units"/>
        <units name="voltage_units" units_ref="voltage_units"/>
        <units name="time_units" units_ref="time_units"/>
        <units name="conductance_units" units_ref="conductance_units"/>
        <units name="millimolar" units_ref="millimolar"/>
    </import>
    <component name="d_CaCl">
        <variable name="Ca_i" public_interface="in" units="millimolar"/>
        <variable name="d_inf_CaCl" units="dimensionless"/>
        <variable initial_value="0.03" name="tau_d_CaCl" units="time_units"/>
        <variable initial_value="0" name="d_CaCl" public_interface="out" units="dimensionless"/>
        <variable name="time" public_interface="in" units="time_units"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>d_inf_CaCl</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <power/>
                            <apply>
                                <divide/>
                                <cn cellml:units="millimolar">0.00014</cn>
                                <ci>Ca_i</ci>
                            </apply>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>d_CaCl</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>d_inf_CaCl</ci>
                        <ci>d_CaCl</ci>
                    </apply>
                    <ci>tau_d_CaCl</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="I_CaCl">
        <variable name="I_CaCl" private_interface="out" public_interface="out" units="current_units"/>
        <variable name="Ca_i" private_interface="out" public_interface="in" units="millimolar"/>
        <variable name="E_Cl" units="voltage_units"/>
        <variable initial_value="10.1" name="G_max_CaCl" units="conductance_units"/>
        <variable name="Vm" private_interface="out" public_interface="in" units="voltage_units"/>
        <variable name="d_CaCl" private_interface="in" units="dimensionless"/>
        <variable name="RToF" public_interface="in" units="voltage_units"/>
        <variable name="Cl_o" public_interface="in" units="millimolar"/>
        <variable name="Cl_i" public_interface="in" units="millimolar"/>
        <variable name="time" private_interface="out" public_interface="in" units="time_units"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_Cl</ci>
                <apply>
                    <times/>
                    <ci>RToF</ci>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>Cl_i</ci>
                            <ci>Cl_o</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_CaCl</ci>
                <apply>
                    <times/>
                    <ci>G_max_CaCl</ci>
                    <ci>d_CaCl</ci>
                    <apply>
                        <minus/>
                        <ci>Vm</ci>
                        <ci>E_Cl</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="d_CaCl" component_2="I_CaCl"/>
        <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
        <map_variables variable_1="d_CaCl" variable_2="d_CaCl"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="I_CaCl">
            <component_ref component="d_CaCl"/>
        </component_ref>
    </group>
</model>
